# This file is part of the HörTech Open Master Hearing Aid (openMHA)
# Copyright © 2013 2017 2018 HörTech gGmbH
#
# openMHA is free software: you can redistribute it and/or modify
# it under the terms of the GNU Affero General Public License as published by
# the Free Software Foundation, version 3 of the License.
#
# openMHA is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU Affero General Public License, version 3 for more details.
#
# You should have received a copy of the GNU Affero General Public License, 
# version 3 along with openMHA.  If not, see <http://www.gnu.org/licenses/>.

# range 1 to INT_MAX.  This is sometimes denoted like this in MHA:
#
# int:[1,[
nchannels_in = 4

# int:[1,[
fragsize = 64

# sampling rate in Hz
# float:]0,[
srate = 44100

# MHA library name
# string
mhalib = transducers

# IO plugin library name
# string
iolib = MHAIOFile


# Plugin name
# string
mha.plugin_name = mhachain

# Reference peak level in dB (0 dB FS corresponds to this SPL level)
# vector<float>
mha.calib_in.peaklevel = [100 100 100 100]

# FIR filter coefficients, one row for each channel
# matrix<float>
mha.calib_in.fir = [[1 0 0];[1 0 0];[1 0 0];[1 0 0]]

# Reference peak level in dB (0 dB FS corresponds to this SPL level)
# vector<float>
mha.calib_out.peaklevel = [100 100]

# FIR filter coefficients, one row for each channel
# matrix<float>
mha.calib_out.fir = [[]]

# attack filter time constant / s
# float:[0,]
mha.calib_out.softclip.tau_attack = 0.002

# decay filter time constant / s
# float:[0,]
mha.calib_out.softclip.tau_decay = 0.005

# start point on linear scale (hard clipping at 1.0)
# float:[0,]
mha.calib_out.softclip.threshold = 0.6

# compression factor
# float:[0,1]
mha.calib_out.softclip.slope = 0.5

# clipping meter time constant / s
# float:[0,]
mha.calib_out.softclip.tau_clip = 1

# maximum allowed clipped ratio
# float:[0,1]
mha.calib_out.softclip.max_clipped = 1

# Will the soft/ hard clipping be executed
# bool
mha.calib_out.do_clipping = no


# list of plugins
# vector<string>
mha.mhachain.algos = [adm overlapadd]

# Channel indices for front microphones
# vector<int>:[0,[
mha.mhachain.adm.front_channels = [0 1]

# Channel indices for rear microphones
# vector<int>:[0,[
mha.mhachain.adm.rear_channels = [2 3]

# distance between front and rear microphones
# vector<float>:[0.00079999998,0.0799999982]
mha.mhachain.adm.distances = [0.0149 0.0149]

# Filter order of FIR lowpass filter
# int:[46,128]
mha.mhachain.adm.lp_order = 128

# Filter order of FIR comb compensation filter
# int:[46,128]
mha.mhachain.adm.decomb_order = 128

# if 1, output front microphones directly, if 2, output rear microphones
# int:[0,2]
mha.mhachain.adm.bypass = 0

# Plugin name
# string
mha.mhachain.overlapadd.plugin_name = mhachain

# FFT length int:[1,]
mha.mhachain.overlapadd.fftlen = 256

# keyword_list:[rect hanning hamming blackman bartlett user]
mha.mhachain.overlapadd.wnd.type = hanning

# User provided window (used if window type==user).
# vector<float>
mha.mhachain.overlapadd.wnd.user = []

# window length/samples
# int:[1,]
mha.mhachain.overlapadd.wnd.len = 128

# window position
# (0 = beginning, 0.5 = symmetric zero padding, 1 = end)
# float:[0,1]
mha.mhachain.overlapadd.wnd.pos = 0.5

# window exponent to be applied to all elements of window function
# float
mha.mhachain.overlapadd.wnd.exp = 1

# Window type.
# keyword_list:[rect hanning hamming blackman bartlett user]
mha.mhachain.overlapadd.zerownd.type = rect

# User provided window (used if window type==user).
# vector<float>
mha.mhachain.overlapadd.zerownd.user = []

# list of plugins
# vector<string>
mha.mhachain.overlapadd.mhachain.algos = [coherence fftfilterbank dc combinechannels  fshift_hilbert:fshift]

# configure the frequency shifter algorithm to downshift everything
# between 1600Hz and 8kHz by 80Hz
mha.mhachain.overlapadd.mhachain.fshift.df = -80
mha.mhachain.overlapadd.mhachain.fshift.fmin = 1600
mha.mhachain.overlapadd.mhachain.fshift.fmax = 8000
mha.mhachain.overlapadd.mhachain.fshift.irslen = 1
mha.mhachain.overlapadd.mhachain.fshift.phasemode = none

# Frequency unit
# keyword_list:[Hz kHz Oct Oct/3 Bark Erb ERB_Glasberg1990]
mha.mhachain.overlapadd.mhachain.coherence.unit = Oct/3

# Frequencies
# vector<float>
mha.mhachain.overlapadd.mhachain.coherence.f = [-6 -4 -3 -2 -1 0 1 2 3 4 5 6 7 8 9]

# frequency scale of filter bank
# keyword_list:[linear bark log erb ERB_Glasberg1990]
mha.mhachain.overlapadd.mhachain.coherence.fscale = linear

# filter overlap type
# keyword_list:[rect linear hanning exp gauss]
mha.mhachain.overlapadd.mhachain.coherence.ovltype = rect

# frequency entry type
# keyword_list:[center edge]
mha.mhachain.overlapadd.mhachain.coherence.ftype = center

# Fail if frequency entries are non-monotonic (otherwise sort)
# bool
mha.mhachain.overlapadd.mhachain.coherence.fail_on_nonmonotonic = yes

# Fail if center frequencies share the same FFT bin.
# bool
mha.mhachain.overlapadd.mhachain.coherence.fail_on_unique_bins = yes

# tau unit
# keyword_list:[seconds periods]
mha.mhachain.overlapadd.mhachain.coherence.tau_unit = seconds

# Averaging time constant
# vector<float>:[0,]
mha.mhachain.overlapadd.mhachain.coherence.tau = [0.0697999969 0.268000007 0.197999999 0.115999997 0.0776000023 0.0399999991 0.0465999991 0.0582000017 0.0697999969 0.0504000001 0.0399999991 0.0399999991 0.0189999994 0.0109000001 0.00349000003]

# Gain exponent
# vector<float>:[0,]
mha.mhachain.overlapadd.mhachain.coherence.alpha = [0 0.296999991 0.56400001 0.504999995 0.652999997 0.949999988 1.07000005 1.34000003 1.15999997 0.890999973 0.535000026 0.326999992 0.208000004 0.178000003 0.119000003]

# gain limit / dB (zero: no limit)
# float:[,0]
mha.mhachain.overlapadd.mhachain.coherence.limit = -20

# average mode
# keyword_list:[ipd spec]
mha.mhachain.overlapadd.mhachain.coherence.average = spec


# Frequency unit
# keyword_list:[Hz kHz Oct Oct/3 Bark Erb ERB_Glasberg1990]
mha.mhachain.overlapadd.mhachain.fftfilterbank.unit = Hz

# Frequencies
# vector<float>
mha.mhachain.overlapadd.mhachain.fftfilterbank.f = [177 297 500 841 1414 2378 4000 6727 11314]

# frequency scale of filter bank
# keyword_list:[linear bark log erb ERB_Glasberg1990]
mha.mhachain.overlapadd.mhachain.fftfilterbank.fscale = log

# filter overlap type
# keyword_list:[rect linear hanning exp gauss]
mha.mhachain.overlapadd.mhachain.fftfilterbank.ovltype = rect


# keyword_list:[center edge]
mha.mhachain.overlapadd.mhachain.fftfilterbank.ftype = center

# gaintable data in dB gains
# matrix<float>
mha.mhachain.overlapadd.mhachain.dc.gtdata = [[3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 3.25217652 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0.0122906091];[3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 3.0213232 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0.0140045602];[2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 2.30672717 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0.0193100162];[19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 19.1121063 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0.0389664993];[27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 27.6649914 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-0.0175450519];[25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 25.3383598 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-1.31861722];[20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 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-3.9000001];[16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 16.6800957 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-0.0135336518];[0 0 0 0 0 0 0 0 0 0 0 0 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0];[7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 7.38468933 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0.0122906091];[7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 7.10151148 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0.0140045602];[6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 6.22494793 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0.0193100162];[20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 20.0989552 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0.0389664993];[30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 30.8797073 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-0.0175450519];[21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 21.8739223 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-1.31861722];[20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 20.1223278 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-3.9000001];[17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 17.5215282 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-0.0135336518];[0 0 0 0 0 0 0 0 0 0 0 0 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0]]

# Vector of input sound pressure levels for which the gains in the
# leftmost column of the matrix "gtdata" above should be applied.
# Each input sound level given here belongs to a different frequency
# band. If only one value is given here, then this only value will
# apply to all matrix rows / frequency bands.
#
# input level for first gain entry in dB SPL
# vector<float>
mha.mhachain.overlapadd.mhachain.dc.gtmin = [0]

# level step size in dB
# vector<float>
mha.mhachain.overlapadd.mhachain.dc.gtstep = [1]

# attack time constant in s
# vector<float>
mha.mhachain.overlapadd.mhachain.dc.tau_attack = [0.02]

# decay time constant in s
# vector<float>
mha.mhachain.overlapadd.mhachain.dc.tau_decay = [0.1]

# Name of fftfilterbank plugin.  Used to extract frequency information.
# string
mha.mhachain.overlapadd.mhachain.dc.fb = fftfilterbank

# name of audio channel number variable (empty: broadband)
# string
mha.mhachain.overlapadd.mhachain.dc.chname = fftfilterbank_nchannels

# Number of output channels
# int:[1,]
mha.mhachain.overlapadd.mhachain.combinechannels.outchannels = 2

# Input sound file name
# string
io.in =  1speaker_diffNoise_4ch.wav

# Output sound file name
# string
io.out = 1speaker_diffNoise_4ch_OUT.wav

# Local Variables:
# indent-tabs-mode: nil
# coding: utf-8-unix
# End:
