# This file is part of the HörTech Open Master Hearing Aid (openMHA)
# Copyright © 2018 HörTech gGmbH
#
# openMHA is free software: you can redistribute it and/or modify
# it under the terms of the GNU Affero General Public License as published by
# the Free Software Foundation, version 3 of the License.
#
# openMHA is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU Affero General Public License, version 3 for more details.
#
# You should have received a copy of the GNU Affero General Public License, 
# version 3 along with openMHA.  If not, see <http://www.gnu.org/licenses/>.

srate=16000
fragsize=32

iolib=MHAIOFile
# Input sound file name
# string
io.in =  sine440.wav

# Output sound file name
# string
io.out = sine440_OUT.wav

mhalib=overlapadd

mha.wnd.type=hanning
mha.fftlen=128
mha.wnd.len=64

mha.plugin_name=fshift:fshift

mha.fshift.df=125
mha.fshift.fmin=0
mha.fshift.fmax=8000

