# This file is part of the HörTech Open Master Hearing Aid (openMHA)
# Copyright © 2017 2018 HörTech gGmbH
#
# openMHA is free software: you can redistribute it and/or modify
# it under the terms of the GNU Affero General Public License as published by
# the Free Software Foundation, version 3 of the License.
#
# openMHA is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU Affero General Public License, version 3 for more details.
#
# You should have received a copy of the GNU Affero General Public License, 
# version 3 along with openMHA.  If not, see <http://www.gnu.org/licenses/>.

srate = 16000
fragsize = 256
nchannels_in = 2

mhalib = overlapadd

mha.fftlen = 512
mha.wnd.len = 512
mha.wnd.exp = 0.5
mha.plugin_name = mhachain

mha.mhachain.algos = [noise_psd_estimator smooth_cepstrum]
mha.mhachain.smooth_cepstrum.noisePow_name = noise_psd_estimator

iolib = MHAIOFile

io.in = 1speaker_diffNoise_2ch_16k.wav
io.out = denoised.wav
