# This file is part of the HörTech Open Master Hearing Aid (openMHA)
# Copyright © 2017 2018 2019 2020 2021 HörTech gGmbH
# Copyright © 2023 2024 2025 Hörzentrum Oldenburg gGmbH
# 
# openMHA is free software: you can redistribute it and/or modify
# it under the terms of the GNU Affero General Public License as published by
# the Free Software Foundation, version 3 of the License.
# 
# openMHA is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU Affero General Public License, version 3 for more details.
# 
# You should have received a copy of the GNU Affero General Public License, 
# version 3 along with openMHA.  If not, see <http://www.gnu.org/licenses/>.


# This configuration simulates a specified hearing impairment by processing a 
# looped sound file in real time, using Jack as the audio I/O backend. The 
# default parameter values given in this file correspond to a symmetric, 
# moderately sloping hearing loss of type N1 (Bisgaard et al., 2010). The type 
# of hearing loss can easily be changed using the Matlab tools provided with 
# this example.
# 
# This configuration assumes that there is a running Jack process with the 
# following parameter settings (as, e.g., started with QjackCtl):
# 
#   Interface:     <sound card to be used by Jack>
#   Sample Rate:   <value of srate (see below)>
#   Frames/Period: <value of fragsize (see below)>
# 
# The configuration uses values that have been pre-computed with the gammatone 
# toolbox by Hohmann and Herzke (2007), which must be downloaded and then added 
# to the Matlab/Octave search path if any changes in the values are required.


# Number of input channels (two ears):
nchannels_in = 2

# Fragment size (in samples per channel); should be the same as the buffer size 
# that the sound card and Jack use (this parameter can be reduced to lower the 
# latency of the system; however, depending on the system, that may cause 
# dropouts/xruns):
fragsize = 1024

# Sampling rate (in Hz); should be the same as the buffer size that the sound 
# card and Jack use:
srate = 48000

# I/O plugin library for live processing:
iolib = MHAIOJackdb

# Jack connection settings (adapt as required):
io.con_in = [system:capture_1 system:capture_2]
io.con_out = [system:playback_1 system:playback_2]
io.name = HSIM

# Top-level plugin (calibration plugin):
mhalib = transducers

# Calibration settings (in dB SPL; replace with the correct calibration values 
# as required):
mha.calib_in.peaklevel = [93.9794 93.9794]
mha.calib_out.peaklevel = [93.9794 93.9794]
mha.plugin_name = mhachain:c

# Top-level plugin chain:
mha.c.algos = [addsndfile fader_wave noise:subnormal_protection split:split_gtfb split:split_dc split:split_smearing matrixmixer]

# The input signal is added from the specified sound file and played back in a 
# loop:
mha.c.addsndfile.path = soundfiles/
mha.c.addsndfile.filename = HSIM_in.wav
mha.c.addsndfile.level = 65.0
mha.c.addsndfile.levelmode = rms
mha.c.addsndfile.channels = [0 1]

# Soft transitions during live configuration changes are ensured by fading in 
# and out:
mha.c.fader_wave.gain = [1.0 1.0]
mha.c.fader_wave.ramplen = 0.25

# The gammatone filterbank plugin (gtfb_analyzer) has no inherent subnormal 
# protection; therefore, low-level protecting noise (in dB SPL) is added:
mha.c.subnormal_protection.lev = -100.0

# The split plugin is used here to compute the gammatone filterbank in parallel 
# to all other processing on a separate CPU (at the cost of one block of delay):
mha.c.split_gtfb.channels = [2]
mha.c.split_gtfb.algos = [mhachain:c]

# The thread/scheduling paramaters should be set according to the following 
# instructions:
# 
#   thread_platform: set to 'posix' for Linux and MacOS, 'win32' for Windows
#   worker_thread_scheduler: set to the return value of 'mha.c.split_gtfb.framework_thread_scheduler?'
#   worker_thread_priority: set to the return value of 'mha.c.split_gtfb.framework_thread_priority?'
# 
mha.c.split_gtfb.thread_platform = win32
mha.c.split_gtfb.worker_thread_scheduler = SCHED_OTHER
mha.c.split_gtfb.worker_thread_priority = 15

# Gammatone filterbank plugin chain:
mha.c.split_gtfb.c.algos = [gtfb_analyzer delay]

# A 32-band gammatone filterbank is used for expansion and spectral smearing. 
# With 32 bands, real and imaginary parts for each band, and two ears, the 
# filterbank produces 128 output channels. The center frequencies are:
# 
#   [73 108 146 189 236 289 348 414 488 569 660 761 874 1000 1140 1296 1470 1664 
#    1879 2119 2387 2685 3017 3387 3799 4259 4770 5340 5974 6681 7469 8346] 
# 
# (rounded, in Hz), resulting in the following filter coefficients and combined 
# normalization and phase correction factors:
mha.c.split_gtfb.c.gtfb_analyzer.coeff = [(0.995616+0.00954498i) (0.995070+0.0140249i) (0.994438+0.0190099i) (0.993705+0.0245560i) (0.992853+0.0307253i) (0.991858+0.0375863i) (0.990696+0.0452148i) (0.989332+0.0536943i) (0.987729+0.0631165i) (0.985839+0.0735823i) (0.983605+0.0852019i) (0.980958+0.0980956i) (0.977812+0.112394i) (0.974066+0.128238i) (0.969595+0.145779i) (0.964248+0.165178i) (0.957843+0.186603i) (0.950155+0.210229i) (0.940917+0.236232i) (0.929804+0.264784i) (0.916422+0.296047i) (0.900302+0.330158i) (0.880882+0.367215i) (0.857495+0.407254i) (0.829353+0.450222i) (0.795541+0.495934i) (0.755004+0.544024i) (0.706554+0.593877i) (0.648882+0.644547i) (0.580603+0.694651i) (0.500329+0.742252i) (0.406808+0.784726i)]
mha.c.split_gtfb.c.gtfb_analyzer.norm_phase = [(-9.82196e-10+1.95628e-10i) (7.31329e-10+1.35605e-9i) (1.41143e-9-1.90379e-9i) (-3.64489e-9-3.15575e-11i) (4.20855e-9+3.70249e-9i) (-3.34987e-9-7.94107e-9i) (-1.04249e-8+8.17765e-9i) (3.64588e-9+2.00359e-8i) (2.87334e-8+1.23986e-8i) (4.33734e-8-2.07422e-8i) (2.09294e-8-7.08151e-8i) (-4.52669e-8-1.03954e-7i) (-1.44570e-7-9.68908e-8i) (-2.67036e-7+7.45239e-11i) (-3.78258e-7+1.57051e-7i) (-3.84055e-7+4.96728e-7i) (-2.66379e-7+9.24473e-7i) (-6.65969e-8+1.47183e-6i) (6.62762e-7+2.15526e-6i) (1.87480e-6+2.89436e-6i) (3.81946e-6+3.63095e-6i) (6.95196e-6+4.05151e-6i) (9.80589e-6+7.38179e-6i) (1.78559e-5+5.56215e-6i) (2.74695e-5+7.45588e-6i) (3.55500e-5+2.46533e-5i) (6.48552e-5+1.02319e-5i) (7.79746e-5+6.17813e-5i) (0.000149613+1.59642e-5i) (0.000181521+0.000136483i) (0.000263589+0.000217947i) (0.000233978+0.000457443i)]

# The phase corrections in norm_phase have been computed for 8 ms algorithmic 
# delay. This was chosen over the 4 ms suggested in Hohmann (2002) because the
# real-time demands of a hearing impairment simulation are not as high as, e.g., 
# those for a hearing aid simulation (as the listener should not be in the same 
# room as the processed sound field), and this reduces the ripples in the 
# frequency response at low frequencies. The following delays (in samples) are 
# required to achieve a delay of 8 ms in all bands:
mha.c.split_gtfb.c.delay.delay = [0 0 0 0 0 0 0 0 0 0 0 0 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362 ...
                                  0 0 0 0 0 0 0 0 0 0 0 0 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362]

# Dynamic range expansion is run on yet another CPU in parallel 
# to all other processing (at the cost of one additional block of delay):
mha.c.split_dc.channels = [128]
mha.c.split_dc.algos = [mhachain:c]

# The thread/scheduling paramaters should be set according to the following 
# instructions:
# 
#   thread_platform: set to 'posix' for Linux and MacOS, 'win32' for Windows
#   worker_thread_scheduler: set to the return value of 'mha.c.split_dc.framework_thread_scheduler?'
#   worker_thread_priority: set to the return value of 'mha.c.split_dc.framework_thread_priority?'
# 
mha.c.split_dc.thread_platform = win32
mha.c.split_dc.worker_thread_scheduler = SCHED_OTHER
mha.c.split_dc.worker_thread_priority = 15

# Dynamic range expansion plugin chain:
mha.c.split_dc.c.algos = [route:discard_imag dc gain]

# The imaginary part of the gammatone filterbank output signal is discarded, 
# keeping only the real part of the signal in the audio path:
mha.c.split_dc.c.discard_imag.out = [:0 :2 :4 :6 :8 :10 :12 :14 :16 :18 :20 :22 :24 :26 :28 :30 :32 :34 :36 :38 :40 :42 :44 :46 :48 :50 :52 :54 :56 :58 :60 :62 :64 :66 :68 :70 :72 :74 :76 :78 :80 :82 :84 :86 :88 :90 :92 :94 :96 :98 :100 :102 :104 :106 :108 :110 :112 :114 :116 :118 :120 :122 :124 :126]

# The following settings implements gain table settings (in dB SPL and dB, 
# respectively) and time constants (in s) corresponding to the dynamic range 
# expansion in a symmetric, moderately sloping hearing loss of type N1 
# (Bisgaard et al., 2010). The gain table has one line per band and ear (note 
# that in order to simulate the recruitment effect, gains for higher input 
# levels should attenuate less than gains for lower input levels):
mha.c.split_dc.c.dc.gtmin = -7.0
mha.c.split_dc.c.dc.gtstep = 1.0
mha.c.split_dc.c.dc.gtdata = [ ...
  [-5023.50 -4924.50 -4825.50 -4726.50 -4627.50 -4528.50 -4429.50 -4330.50 -4231.50 -4132.50 -4033.50 -3934.50 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-1.14555]; ...
  [-4165.51 -4066.51 -3967.51 -3868.51 -3769.51 -3670.51 -3571.51 -3472.51 -3373.51 -3274.51 -3175.51 -3076.51 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-9.81212]; ...
  [-3612.89 -3513.89 -3414.89 -3315.89 -3216.89 -3117.89 -3018.89 -2919.89 -2820.89 -2721.89 -2622.89 -2523.89 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-15.3941]; ...
  [-3205.11 -3106.11 -3007.11 -2908.11 -2809.11 -2710.11 -2611.11 -2512.11 -2413.11 -2314.11 -2215.11 -2116.11 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-19.5131]; ...
  [-2892.18 -2793.18 -2694.18 -2595.18 -2496.18 -2397.18 -2298.18 -2199.18 -2100.18 -2001.18 -1902.18 -1803.18 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-22.6740]; ...
  [-2642.64 -2543.64 -2444.64 -2345.64 -2246.64 -2147.64 -2048.64 -1949.64 -1850.64 -1751.64 -1652.64 -1553.64 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-25.1946]; ...
  [-2437.02 -2338.02 -2239.02 -2140.02 -2041.02 -1942.02 -1843.02 -1744.02 -1645.02 -1546.02 -1447.02 -1348.02 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-27.2716]; ...
  [-2276.37 -2177.37 -2078.37 -1979.37 -1880.37 -1781.37 -1682.37 -1583.37 -1484.37 -1385.37 -1286.37 -1187.37 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-28.8943]; ...
  [-2146.78 -2047.78 -1948.78 -1849.78 -1750.78 -1651.78 -1552.78 -1453.78 -1354.78 -1255.78 -1156.78 -1057.78 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-30.2033]; ...
  [-2044.42 -1945.42 -1846.42 -1747.42 -1648.42 -1549.42 -1450.42 -1351.42 -1252.42 -1153.42 -1054.42 -955.422 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-31.2372]; ...
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  [-6819.28 -6720.28 -6621.28 -6522.28 -6423.28 -6324.28 -6225.28 -6126.28 -6027.28 -5928.28 -5829.28 -5730.28 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-21.7903]; ...
]
mha.c.split_dc.c.dc.tau_rmslev = [0.0]
mha.c.split_dc.c.dc.tau_attack = [0.02]
mha.c.split_dc.c.dc.tau_decay = [0.1]
mha.c.split_dc.c.dc.log_interp = yes

# The gammatone filterbank needs the following recombination gains (in dB):
mha.c.split_dc.c.gain.gains = [-1.55691 -1.95579 -2.62442 -3.06989 -3.44172 -3.65322 -3.70893 -3.60108 -3.59054 -3.60504 -3.60055 -3.59910 -3.61174 -3.58383 -3.60328 -3.59992 -3.60314 -3.59718 -3.58993 -3.60575 -3.63446 -3.56872 -3.60702 -3.60728 -3.57844 -3.66325 -3.53703 -3.67926 -3.45171 -3.76472 -4.20037 -1.27935 ...
                               -1.55691 -1.95579 -2.62442 -3.06989 -3.44172 -3.65322 -3.70893 -3.60108 -3.59054 -3.60504 -3.60055 -3.59910 -3.61174 -3.58383 -3.60328 -3.59992 -3.60314 -3.59718 -3.58993 -3.60575 -3.63446 -3.56872 -3.60702 -3.60728 -3.57844 -3.66325 -3.53703 -3.67926 -3.45171 -3.76472 -4.20037 -1.27935]

# Spectral smearing is run on yet another CPU in parallel to all other 
# processing (at the cost of one additional block of delay):
mha.c.split_smearing.channels = [64]
mha.c.split_smearing.algos = [split:s]

# The thread/scheduling paramaters should be set according to the following 
# instructions:
# 
#   thread_platform: set to 'posix' for Linux and MacOS, 'win32' for Windows
#   worker_thread_scheduler: set to the return value of 'mha.c.split_smearing.framework_thread_scheduler?'
#   worker_thread_priority: set to the return value of 'mha.c.split_smearing.framework_thread_priority?'
# 
mha.c.split_smearing.thread_platform = win32
mha.c.split_smearing.worker_thread_scheduler = SCHED_OTHER
mha.c.split_smearing.worker_thread_priority = 15

# For the spectral smearing, we multiply low-frequency noise with the signal 
# (corresponding to a convolution in the frequency domain). The cutoff frequency 
# of the noise determines half the width of the spectral smearing (i.e., a 
# signal at frequency f will be smeared from f - f_cutoff to f + f_cutoff). 
# Since the signal is split into frequency bands, different smearing widths can 
# be used for each band and ear. In order to generate the low-frequency noise, 
# we filter white noise with a low-pass filter. For best results, the noises 
# should be statistically independent across bands. Therefore, we use 64 
# different noise generators and filter each with a different low-pass filter. 
# We use gammatone filters with a center frequency of 0 Hz and different 
# bandwidths for this purpose (the bandwidth of a gammatone filter centered at 
# 0 Hz is equal to the smearing width, since half the bandwidth is equal to the 
# positive cutoff frequency).

# Split into 64 single-band signals (32 bands for two ears) in order to create 
# a filterbank with only one band for each low-pass filtering task (do not 
# distribute over CPUs, but use the dummy platform here instead to avoid 
# overhead):
mha.c.split_smearing.s.channels = [1 1 1 1 1 1 1 1 1 1 1 1 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1]

# With one signal processing chain per band, the chains are named according to 
# the left (L) or right (R) ear and the center frequency of the band (rounded, 
# in Hz; e.g., L0073 for the left-ear band with a center frequency of 73 Hz):
mha.c.split_smearing.s.algos = [mhachain:L0073 mhachain:L0108 mhachain:L0146 mhachain:L0189 mhachain:L0236 mhachain:L0289 mhachain:L0348 mhachain:L0414 mhachain:L0488 mhachain:L0569 mhachain:L0660 mhachain:L0761 mhachain:L0874 mhachain:L1000 mhachain:L1140 mhachain:L1296 mhachain:L1470 mhachain:L1663 mhachain:L1879 mhachain:L2119 mhachain:L2387 mhachain:L2685 mhachain:L3017 mhachain:L3387 mhachain:L3799 mhachain:L4259 mhachain:L4770 mhachain:L5340 mhachain:L5974 mhachain:L6681 mhachain:L7469 mhachain:L8346 mhachain:R0073 mhachain:R0108 mhachain:R0146 mhachain:R0189 mhachain:R0236 mhachain:R0289 mhachain:R0348 mhachain:R0414 mhachain:R0488 mhachain:R0569 mhachain:R0660 mhachain:R0761 mhachain:R0874 mhachain:R1000 mhachain:R1140 mhachain:R1296 mhachain:R1470 mhachain:R1663 mhachain:R1879 mhachain:R2119 mhachain:R2387 mhachain:R2685 mhachain:R3017 mhachain:R3387 mhachain:R3799 mhachain:R4259 mhachain:R4770 mhachain:R5340 mhachain:R5974 mhachain:R6681 mhachain:R7469 mhachain:R8346]

# The same processing chain is used for spectral smearing in each of the 
# 64 bands (except for the smearing width):
mha.c.split_smearing.s.L0073.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0108.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0146.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0189.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0236.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0289.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0348.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0414.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0488.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0569.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0660.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0761.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L0874.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1000.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1140.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1296.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1470.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1663.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L1879.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L2119.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L2387.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L2685.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L3017.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L3387.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L3799.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L4259.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L4770.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L5340.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L5974.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L6681.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L7469.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.L8346.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0073.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0108.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0146.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0189.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0236.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0289.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0348.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0414.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0488.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0569.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0660.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0761.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R0874.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1000.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1140.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1296.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1470.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1663.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R1879.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R2119.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R2387.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R2685.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R3017.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R3387.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R3799.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R4259.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R4770.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R5340.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R5974.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R6681.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R7469.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]
mha.c.split_smearing.s.R8346.algos = [save_wave:signal noise:noisegen gtfb_analyzer:lpfilt route:lpnoise ac_mul route:smeared]

# For spectral smearing, low-pass filtered noise with an RMS amplitude of 1 Pa 
# (corresponding to 93.9794 dB SPL) is multiplied with the signal; for this, a 
# broadband noise signal (uncorrelated across the bands) is first generated:
mha.c.split_smearing.s.L0073.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0073.noisegen.mode = replace
mha.c.split_smearing.s.L0108.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0108.noisegen.mode = replace
mha.c.split_smearing.s.L0146.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0146.noisegen.mode = replace
mha.c.split_smearing.s.L0189.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0189.noisegen.mode = replace
mha.c.split_smearing.s.L0236.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0236.noisegen.mode = replace
mha.c.split_smearing.s.L0289.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0289.noisegen.mode = replace
mha.c.split_smearing.s.L0348.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0348.noisegen.mode = replace
mha.c.split_smearing.s.L0414.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0414.noisegen.mode = replace
mha.c.split_smearing.s.L0488.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0488.noisegen.mode = replace
mha.c.split_smearing.s.L0569.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0569.noisegen.mode = replace
mha.c.split_smearing.s.L0660.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0660.noisegen.mode = replace
mha.c.split_smearing.s.L0761.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0761.noisegen.mode = replace
mha.c.split_smearing.s.L0874.noisegen.lev = 93.9794
mha.c.split_smearing.s.L0874.noisegen.mode = replace
mha.c.split_smearing.s.L1000.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1000.noisegen.mode = replace
mha.c.split_smearing.s.L1140.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1140.noisegen.mode = replace
mha.c.split_smearing.s.L1296.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1296.noisegen.mode = replace
mha.c.split_smearing.s.L1470.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1470.noisegen.mode = replace
mha.c.split_smearing.s.L1663.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1663.noisegen.mode = replace
mha.c.split_smearing.s.L1879.noisegen.lev = 93.9794
mha.c.split_smearing.s.L1879.noisegen.mode = replace
mha.c.split_smearing.s.L2119.noisegen.lev = 93.9794
mha.c.split_smearing.s.L2119.noisegen.mode = replace
mha.c.split_smearing.s.L2387.noisegen.lev = 93.9794
mha.c.split_smearing.s.L2387.noisegen.mode = replace
mha.c.split_smearing.s.L2685.noisegen.lev = 93.9794
mha.c.split_smearing.s.L2685.noisegen.mode = replace
mha.c.split_smearing.s.L3017.noisegen.lev = 93.9794
mha.c.split_smearing.s.L3017.noisegen.mode = replace
mha.c.split_smearing.s.L3387.noisegen.lev = 93.9794
mha.c.split_smearing.s.L3387.noisegen.mode = replace
mha.c.split_smearing.s.L3799.noisegen.lev = 93.9794
mha.c.split_smearing.s.L3799.noisegen.mode = replace
mha.c.split_smearing.s.L4259.noisegen.lev = 93.9794
mha.c.split_smearing.s.L4259.noisegen.mode = replace
mha.c.split_smearing.s.L4770.noisegen.lev = 93.9794
mha.c.split_smearing.s.L4770.noisegen.mode = replace
mha.c.split_smearing.s.L5340.noisegen.lev = 93.9794
mha.c.split_smearing.s.L5340.noisegen.mode = replace
mha.c.split_smearing.s.L5974.noisegen.lev = 93.9794
mha.c.split_smearing.s.L5974.noisegen.mode = replace
mha.c.split_smearing.s.L6681.noisegen.lev = 93.9794
mha.c.split_smearing.s.L6681.noisegen.mode = replace
mha.c.split_smearing.s.L7469.noisegen.lev = 93.9794
mha.c.split_smearing.s.L7469.noisegen.mode = replace
mha.c.split_smearing.s.L8346.noisegen.lev = 93.9794
mha.c.split_smearing.s.L8346.noisegen.mode = replace
mha.c.split_smearing.s.R0073.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0073.noisegen.mode = replace
mha.c.split_smearing.s.R0108.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0108.noisegen.mode = replace
mha.c.split_smearing.s.R0146.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0146.noisegen.mode = replace
mha.c.split_smearing.s.R0189.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0189.noisegen.mode = replace
mha.c.split_smearing.s.R0236.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0236.noisegen.mode = replace
mha.c.split_smearing.s.R0289.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0289.noisegen.mode = replace
mha.c.split_smearing.s.R0348.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0348.noisegen.mode = replace
mha.c.split_smearing.s.R0414.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0414.noisegen.mode = replace
mha.c.split_smearing.s.R0488.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0488.noisegen.mode = replace
mha.c.split_smearing.s.R0569.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0569.noisegen.mode = replace
mha.c.split_smearing.s.R0660.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0660.noisegen.mode = replace
mha.c.split_smearing.s.R0761.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0761.noisegen.mode = replace
mha.c.split_smearing.s.R0874.noisegen.lev = 93.9794
mha.c.split_smearing.s.R0874.noisegen.mode = replace
mha.c.split_smearing.s.R1000.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1000.noisegen.mode = replace
mha.c.split_smearing.s.R1140.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1140.noisegen.mode = replace
mha.c.split_smearing.s.R1296.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1296.noisegen.mode = replace
mha.c.split_smearing.s.R1470.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1470.noisegen.mode = replace
mha.c.split_smearing.s.R1663.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1663.noisegen.mode = replace
mha.c.split_smearing.s.R1879.noisegen.lev = 93.9794
mha.c.split_smearing.s.R1879.noisegen.mode = replace
mha.c.split_smearing.s.R2119.noisegen.lev = 93.9794
mha.c.split_smearing.s.R2119.noisegen.mode = replace
mha.c.split_smearing.s.R2387.noisegen.lev = 93.9794
mha.c.split_smearing.s.R2387.noisegen.mode = replace
mha.c.split_smearing.s.R2685.noisegen.lev = 93.9794
mha.c.split_smearing.s.R2685.noisegen.mode = replace
mha.c.split_smearing.s.R3017.noisegen.lev = 93.9794
mha.c.split_smearing.s.R3017.noisegen.mode = replace
mha.c.split_smearing.s.R3387.noisegen.lev = 93.9794
mha.c.split_smearing.s.R3387.noisegen.mode = replace
mha.c.split_smearing.s.R3799.noisegen.lev = 93.9794
mha.c.split_smearing.s.R3799.noisegen.mode = replace
mha.c.split_smearing.s.R4259.noisegen.lev = 93.9794
mha.c.split_smearing.s.R4259.noisegen.mode = replace
mha.c.split_smearing.s.R4770.noisegen.lev = 93.9794
mha.c.split_smearing.s.R4770.noisegen.mode = replace
mha.c.split_smearing.s.R5340.noisegen.lev = 93.9794
mha.c.split_smearing.s.R5340.noisegen.mode = replace
mha.c.split_smearing.s.R5974.noisegen.lev = 93.9794
mha.c.split_smearing.s.R5974.noisegen.mode = replace
mha.c.split_smearing.s.R6681.noisegen.lev = 93.9794
mha.c.split_smearing.s.R6681.noisegen.mode = replace
mha.c.split_smearing.s.R7469.noisegen.lev = 93.9794
mha.c.split_smearing.s.R7469.noisegen.mode = replace
mha.c.split_smearing.s.R8346.noisegen.lev = 93.9794
mha.c.split_smearing.s.R8346.noisegen.mode = replace

# In each band, we use a single-channel gammatone filterbank with a center 
# frequency of 0 Hz for low-pass filtering the noise. A center frequency of 0 Hz 
# implies that the filter coefficient is a real number (i.e., its imaginary part 
# is zero). Its magnitude determines the bandwidth, which is the same as the 
# smearing width. The filter coefficient can be calculated from the desired 
# smearing width as described in Equation 14 in Hohmann (2002). For a fourth-
# order filter centered at 0 Hz at 48000 Hz sampling rate, the coefficient is:
# 
#   coeff = exp(-smearing_width * 6.4/48000).
# 
# The usual normalization strategy for a gammatone filter would let the signal 
# component at the center frequency (here: 0 Hz) pass unmodified. This is not 
# what is needed here; instead, we want the filtered, narrow-band noise to have 
# the same power as the original white noise. Hohmann (2002, Equation 5) gives 
# the frequency response of a fourth-order gammatone filter like the one used 
# here as:
# 
#   K4(z) = 1/(1 - coeff * z^-1)^4.
# 
# We need to integrate the squared magnitude of K4 over the unit circle and use 
# the reciprocal of the square root of this value as the normalization factor. A 
# quick numeric solution in Matlab or Octave is:
# 
#   phi = 0:1e-5:2*pi;
#   norm_phase = 1/sqrt(sum(abs(1./(1 - coeff * exp(1i * phi)).^4).^2)/length(phi));
# 
# The following settings implement frequency-specific spectral smearing 
# corresponding to a symmetric, moderately sloping hearing loss of type N1 
# (Bisgaard et al., 2010):
mha.c.split_smearing.s.L0073.lpfilt.coeff = [0.999826]
mha.c.split_smearing.s.L0073.lpfilt.norm_phase = [1.72329e-13]
mha.c.split_smearing.s.L0108.lpfilt.coeff = [0.999807]
mha.c.split_smearing.s.L0108.lpfilt.norm_phase = [2.51766e-13]
mha.c.split_smearing.s.L0146.lpfilt.coeff = [0.999784]
mha.c.split_smearing.s.L0146.lpfilt.norm_phase = [3.67770e-13]
mha.c.split_smearing.s.L0189.lpfilt.coeff = [0.999760]
mha.c.split_smearing.s.L0189.lpfilt.norm_phase = [5.37154e-13]
mha.c.split_smearing.s.L0236.lpfilt.coeff = [0.999733]
mha.c.split_smearing.s.L0236.lpfilt.norm_phase = [7.84460e-13]
mha.c.split_smearing.s.L0289.lpfilt.coeff = [0.999702]
mha.c.split_smearing.s.L0289.lpfilt.norm_phase = [1.14550e-12]
mha.c.split_smearing.s.L0348.lpfilt.coeff = [0.999668]
mha.c.split_smearing.s.L0348.lpfilt.norm_phase = [1.67255e-12]
mha.c.split_smearing.s.L0414.lpfilt.coeff = [0.999630]
mha.c.split_smearing.s.L0414.lpfilt.norm_phase = [2.44188e-12]
mha.c.split_smearing.s.L0488.lpfilt.coeff = [0.999588]
mha.c.split_smearing.s.L0488.lpfilt.norm_phase = [3.56478e-12]
mha.c.split_smearing.s.L0569.lpfilt.coeff = [0.999541]
mha.c.split_smearing.s.L0569.lpfilt.norm_phase = [5.20365e-12]
mha.c.split_smearing.s.L0660.lpfilt.coeff = [0.999489]
mha.c.split_smearing.s.L0660.lpfilt.norm_phase = [7.59545e-12]
mha.c.split_smearing.s.L0761.lpfilt.coeff = [0.999431]
mha.c.split_smearing.s.L0761.lpfilt.norm_phase = [1.10859e-11]
mha.c.split_smearing.s.L0874.lpfilt.coeff = [0.999366]
mha.c.split_smearing.s.L0874.lpfilt.norm_phase = [1.61793e-11]
mha.c.split_smearing.s.L1000.lpfilt.coeff = [0.999294]
mha.c.split_smearing.s.L1000.lpfilt.norm_phase = [2.36116e-11]
mha.c.split_smearing.s.L1140.lpfilt.coeff = [0.999213]
mha.c.split_smearing.s.L1140.lpfilt.norm_phase = [3.44561e-11]
mha.c.split_smearing.s.L1296.lpfilt.coeff = [0.999124]
mha.c.split_smearing.s.L1296.lpfilt.norm_phase = [5.02788e-11]
mha.c.split_smearing.s.L1470.lpfilt.coeff = [0.999024]
mha.c.split_smearing.s.L1470.lpfilt.norm_phase = [7.33635e-11]
mha.c.split_smearing.s.L1663.lpfilt.coeff = [0.998598]
mha.c.split_smearing.s.L1663.lpfilt.norm_phase = [2.60310e-10]
mha.c.split_smearing.s.L1879.lpfilt.coeff = [0.997876]
mha.c.split_smearing.s.L1879.lpfilt.norm_phase = [1.11517e-9]
mha.c.split_smearing.s.L2119.lpfilt.coeff = [0.996998]
mha.c.split_smearing.s.L2119.lpfilt.norm_phase = [3.74621e-9]
mha.c.split_smearing.s.L2387.lpfilt.coeff = [0.996048]
mha.c.split_smearing.s.L2387.lpfilt.norm_phase = [9.79902e-9]
mha.c.split_smearing.s.L2685.lpfilt.coeff = [0.994745]
mha.c.split_smearing.s.L2685.lpfilt.norm_phase = [2.65654e-8]
mha.c.split_smearing.s.L3017.lpfilt.coeff = [0.992872]
mha.c.split_smearing.s.L3017.lpfilt.norm_phase = [7.71705e-8]
mha.c.split_smearing.s.L3387.lpfilt.coeff = [0.988347]
mha.c.split_smearing.s.L3387.lpfilt.norm_phase = [4.30846e-7]
mha.c.split_smearing.s.L3799.lpfilt.coeff = [0.980987]
mha.c.split_smearing.s.L3799.lpfilt.norm_phase = [2.38570e-6]
mha.c.split_smearing.s.L4259.lpfilt.coeff = [0.972105]
mha.c.split_smearing.s.L4259.lpfilt.norm_phase = [9.10634e-6]
mha.c.split_smearing.s.L4770.lpfilt.coeff = [0.962161]
mha.c.split_smearing.s.L4770.lpfilt.norm_phase = [2.64043e-5]
mha.c.split_smearing.s.L5340.lpfilt.coeff = [0.948294]
mha.c.split_smearing.s.L5340.lpfilt.norm_phase = [7.84684e-5]
mha.c.split_smearing.s.L5974.lpfilt.coeff = [0.928915]
mha.c.split_smearing.s.L5974.lpfilt.norm_phase = [0.000237833]
mha.c.split_smearing.s.L6681.lpfilt.coeff = [0.901849]
mha.c.split_smearing.s.L6681.lpfilt.norm_phase = [0.000730195]
mha.c.split_smearing.s.L7469.lpfilt.coeff = [0.864217]
mha.c.split_smearing.s.L7469.lpfilt.norm_phase = [0.00224946]
mha.c.split_smearing.s.L8346.lpfilt.coeff = [0.812418]
mha.c.split_smearing.s.L8346.lpfilt.norm_phase = [0.00686213]
mha.c.split_smearing.s.R0073.lpfilt.coeff = [0.999826]
mha.c.split_smearing.s.R0073.lpfilt.norm_phase = [1.72329e-13]
mha.c.split_smearing.s.R0108.lpfilt.coeff = [0.999807]
mha.c.split_smearing.s.R0108.lpfilt.norm_phase = [2.51766e-13]
mha.c.split_smearing.s.R0146.lpfilt.coeff = [0.999784]
mha.c.split_smearing.s.R0146.lpfilt.norm_phase = [3.67770e-13]
mha.c.split_smearing.s.R0189.lpfilt.coeff = [0.999760]
mha.c.split_smearing.s.R0189.lpfilt.norm_phase = [5.37154e-13]
mha.c.split_smearing.s.R0236.lpfilt.coeff = [0.999733]
mha.c.split_smearing.s.R0236.lpfilt.norm_phase = [7.84460e-13]
mha.c.split_smearing.s.R0289.lpfilt.coeff = [0.999702]
mha.c.split_smearing.s.R0289.lpfilt.norm_phase = [1.14550e-12]
mha.c.split_smearing.s.R0348.lpfilt.coeff = [0.999668]
mha.c.split_smearing.s.R0348.lpfilt.norm_phase = [1.67255e-12]
mha.c.split_smearing.s.R0414.lpfilt.coeff = [0.999630]
mha.c.split_smearing.s.R0414.lpfilt.norm_phase = [2.44188e-12]
mha.c.split_smearing.s.R0488.lpfilt.coeff = [0.999588]
mha.c.split_smearing.s.R0488.lpfilt.norm_phase = [3.56478e-12]
mha.c.split_smearing.s.R0569.lpfilt.coeff = [0.999541]
mha.c.split_smearing.s.R0569.lpfilt.norm_phase = [5.20365e-12]
mha.c.split_smearing.s.R0660.lpfilt.coeff = [0.999489]
mha.c.split_smearing.s.R0660.lpfilt.norm_phase = [7.59545e-12]
mha.c.split_smearing.s.R0761.lpfilt.coeff = [0.999431]
mha.c.split_smearing.s.R0761.lpfilt.norm_phase = [1.10859e-11]
mha.c.split_smearing.s.R0874.lpfilt.coeff = [0.999366]
mha.c.split_smearing.s.R0874.lpfilt.norm_phase = [1.61793e-11]
mha.c.split_smearing.s.R1000.lpfilt.coeff = [0.999294]
mha.c.split_smearing.s.R1000.lpfilt.norm_phase = [2.36116e-11]
mha.c.split_smearing.s.R1140.lpfilt.coeff = [0.999213]
mha.c.split_smearing.s.R1140.lpfilt.norm_phase = [3.44561e-11]
mha.c.split_smearing.s.R1296.lpfilt.coeff = [0.999124]
mha.c.split_smearing.s.R1296.lpfilt.norm_phase = [5.02788e-11]
mha.c.split_smearing.s.R1470.lpfilt.coeff = [0.999024]
mha.c.split_smearing.s.R1470.lpfilt.norm_phase = [7.33635e-11]
mha.c.split_smearing.s.R1663.lpfilt.coeff = [0.998598]
mha.c.split_smearing.s.R1663.lpfilt.norm_phase = [2.60310e-10]
mha.c.split_smearing.s.R1879.lpfilt.coeff = [0.997876]
mha.c.split_smearing.s.R1879.lpfilt.norm_phase = [1.11517e-9]
mha.c.split_smearing.s.R2119.lpfilt.coeff = [0.996998]
mha.c.split_smearing.s.R2119.lpfilt.norm_phase = [3.74621e-9]
mha.c.split_smearing.s.R2387.lpfilt.coeff = [0.996048]
mha.c.split_smearing.s.R2387.lpfilt.norm_phase = [9.79902e-9]
mha.c.split_smearing.s.R2685.lpfilt.coeff = [0.994745]
mha.c.split_smearing.s.R2685.lpfilt.norm_phase = [2.65654e-8]
mha.c.split_smearing.s.R3017.lpfilt.coeff = [0.992872]
mha.c.split_smearing.s.R3017.lpfilt.norm_phase = [7.71705e-8]
mha.c.split_smearing.s.R3387.lpfilt.coeff = [0.988347]
mha.c.split_smearing.s.R3387.lpfilt.norm_phase = [4.30846e-7]
mha.c.split_smearing.s.R3799.lpfilt.coeff = [0.980987]
mha.c.split_smearing.s.R3799.lpfilt.norm_phase = [2.38570e-6]
mha.c.split_smearing.s.R4259.lpfilt.coeff = [0.972105]
mha.c.split_smearing.s.R4259.lpfilt.norm_phase = [9.10634e-6]
mha.c.split_smearing.s.R4770.lpfilt.coeff = [0.962161]
mha.c.split_smearing.s.R4770.lpfilt.norm_phase = [2.64043e-5]
mha.c.split_smearing.s.R5340.lpfilt.coeff = [0.948294]
mha.c.split_smearing.s.R5340.lpfilt.norm_phase = [7.84684e-5]
mha.c.split_smearing.s.R5974.lpfilt.coeff = [0.928915]
mha.c.split_smearing.s.R5974.lpfilt.norm_phase = [0.000237833]
mha.c.split_smearing.s.R6681.lpfilt.coeff = [0.901849]
mha.c.split_smearing.s.R6681.lpfilt.norm_phase = [0.000730195]
mha.c.split_smearing.s.R7469.lpfilt.coeff = [0.864217]
mha.c.split_smearing.s.R7469.lpfilt.norm_phase = [0.00224946]
mha.c.split_smearing.s.R8346.lpfilt.coeff = [0.812418]
mha.c.split_smearing.s.R8346.lpfilt.norm_phase = [0.00686213]

# The gammatone filterbank for low-pass filtering the noise again results in 
# two output channels for every input channel: one for the real-valued part and 
# one for the imaginary-valued part (which contains only zeros because of the
# real-valued filter coefficients). We only need to store the real-valued part 
# in AC space for the subsequent multiplication with the audio signal:
mha.c.split_smearing.s.L0073.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0108.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0146.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0189.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0236.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0289.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0348.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0414.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0488.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0569.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0660.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0761.lpnoise.ac = [:0]
mha.c.split_smearing.s.L0874.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1000.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1140.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1296.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1470.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1663.lpnoise.ac = [:0]
mha.c.split_smearing.s.L1879.lpnoise.ac = [:0]
mha.c.split_smearing.s.L2119.lpnoise.ac = [:0]
mha.c.split_smearing.s.L2387.lpnoise.ac = [:0]
mha.c.split_smearing.s.L2685.lpnoise.ac = [:0]
mha.c.split_smearing.s.L3017.lpnoise.ac = [:0]
mha.c.split_smearing.s.L3387.lpnoise.ac = [:0]
mha.c.split_smearing.s.L3799.lpnoise.ac = [:0]
mha.c.split_smearing.s.L4259.lpnoise.ac = [:0]
mha.c.split_smearing.s.L4770.lpnoise.ac = [:0]
mha.c.split_smearing.s.L5340.lpnoise.ac = [:0]
mha.c.split_smearing.s.L5974.lpnoise.ac = [:0]
mha.c.split_smearing.s.L6681.lpnoise.ac = [:0]
mha.c.split_smearing.s.L7469.lpnoise.ac = [:0]
mha.c.split_smearing.s.L8346.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0073.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0108.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0146.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0189.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0236.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0289.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0348.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0414.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0488.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0569.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0660.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0761.lpnoise.ac = [:0]
mha.c.split_smearing.s.R0874.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1000.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1140.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1296.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1470.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1663.lpnoise.ac = [:0]
mha.c.split_smearing.s.R1879.lpnoise.ac = [:0]
mha.c.split_smearing.s.R2119.lpnoise.ac = [:0]
mha.c.split_smearing.s.R2387.lpnoise.ac = [:0]
mha.c.split_smearing.s.R2685.lpnoise.ac = [:0]
mha.c.split_smearing.s.R3017.lpnoise.ac = [:0]
mha.c.split_smearing.s.R3387.lpnoise.ac = [:0]
mha.c.split_smearing.s.R3799.lpnoise.ac = [:0]
mha.c.split_smearing.s.R4259.lpnoise.ac = [:0]
mha.c.split_smearing.s.R4770.lpnoise.ac = [:0]
mha.c.split_smearing.s.R5340.lpnoise.ac = [:0]
mha.c.split_smearing.s.R5974.lpnoise.ac = [:0]
mha.c.split_smearing.s.R6681.lpnoise.ac = [:0]
mha.c.split_smearing.s.R7469.lpnoise.ac = [:0]
mha.c.split_smearing.s.R8346.lpnoise.ac = [:0]

# The audio signal is then multiplied with the low-pass filtered noise (because 
# the noise is scaled so that its RMS amplitude = 1 Pa, the result has the same 
# level as the original signal):
mha.c.split_smearing.s.L0073.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0108.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0146.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0189.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0236.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0289.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0348.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0414.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0488.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0569.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0660.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0761.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L0874.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1000.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1140.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1296.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1470.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1663.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L1879.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L2119.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L2387.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L2685.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L3017.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L3387.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L3799.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L4259.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L4770.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L5340.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L5974.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L6681.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L7469.ac_mul = signal * lpnoise
mha.c.split_smearing.s.L8346.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0073.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0108.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0146.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0189.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0236.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0289.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0348.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0414.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0488.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0569.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0660.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0761.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R0874.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1000.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1140.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1296.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1470.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1663.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R1879.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R2119.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R2387.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R2685.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R3017.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R3387.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R3799.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R4259.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R4770.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R5340.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R5974.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R6681.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R7469.ac_mul = signal * lpnoise
mha.c.split_smearing.s.R8346.ac_mul = signal * lpnoise

# At this point, the processed signal path still contains the low-pass filtered 
# noise; the original signal and the smeared signal (ac_mul) both live in AC 
# space. Therefore, the noise is replaced by the smeared signal (if there are 
# bands where no smearing should be applied, then ac_mul:0 should be replaced by 
# signal:0 for those bands):
mha.c.split_smearing.s.L0073.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0108.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0146.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0189.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0236.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0289.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0348.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0414.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0488.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0569.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0660.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0761.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L0874.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1000.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1140.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1296.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1470.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1663.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L1879.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L2119.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L2387.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L2685.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L3017.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L3387.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L3799.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L4259.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L4770.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L5340.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L5974.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L6681.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L7469.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.L8346.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0073.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0108.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0146.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0189.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0236.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0289.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0348.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0414.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0488.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0569.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0660.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0761.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R0874.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1000.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1140.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1296.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1470.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1663.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R1879.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R2119.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R2387.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R2685.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R3017.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R3387.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R3799.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R4259.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R4770.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R5340.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R5974.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R6681.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R7469.smeared.out = [ac_mul:0]
mha.c.split_smearing.s.R8346.smeared.out = [ac_mul:0]

# The matrix mixer plugin is used to recombine all bands into broadband signals 
# for the left and right ear, respectively:
mha.c.matrixmixer.m = [ ...
  [1 1 1 1 1 1 1 1 1 1 1 1 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0]; ...
  [0 0 0 0 0 0 0 0 0 0 0 0 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1]; ...
]


# References:
# 
# Bisgaard, N., Vlaming, M. S. M. G., & Dahlquist, M. (2010). Standard 
#   audiograms for the IEC 60118-15 measurement procedure. Trends in 
#   Amplification, 14(2), 113–120. https://doi.org/10.1177/1084713810379609
# 
# Hohmann, V. (2002). Frequency analysis and synthesis using a Gammatone 
#   filterbank. Acta Acustica united with Acustica, 88(3), 433-442.
# 
# Hohmann, V., & Herzke, T. (2007). Software for "Frequency analysis and 
#   synthesis using a Gammatone filterbank" (Version 1.1). Zenodo. 
#   https://doi.org/10.5281/zenodo.2643400
