# Example configuration file for testing your calibration after doing the
# procedure described in the openMHA_calibration manual.

# Replace the .peaklevel and .fir values below with your own values. 

# Change the sampling rate to the sampling rate that you used during calibration
srate = 44100

# Change to the number of output devices that you have calibrated
nchannels_in = 1

# Change to the desired fragsize
fragsize = 64

# Load IO library
iolib = MHAIOJackdb

# Connect the MHA channels to the correct sound card channels: Adjust as needed
io.con_out = [system:playback_2]

# calibration plugin
mhalib = transducers

# replace .peak and .fir with the values from your calibration measurement
mha.calib_out.peaklevel = [110.679400]
mha.calib_out.fir = [[-0.0000270 -0.0001299 -0.0002418 -0.0002314 -0.0000319 0.0002748 0.0005179 0.0006457 0.0008513 0.0013835 0.0021996 0.0029527 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-0.0000270 ]]

# test tone generator
mha.plugin_name = sine

# on which channels to produce the test tones
mha.sine.channels = [0]

# test tone frequency and level
mha.sine.f = 1000
mha.sine.lev = 80

# dummy input calibration
mha.calib_in.peaklevel = [-200]

