#[MHAVersion 4.4]
nchannels_in = 2
fragsize = 64
srate = 48000
mhalib = splcalib
iolib = MHAIOJackdb
mha.plugin_name = mhachain
#
# Configuration of calibration module
# (same as in fwex3.cfg)
#
mha.calib_in.nbits = 0
mha.calib_in.fir = [[1];[1]]
mha.calib_in.peaklevel = [115.6 118]
mha.calib_out.peaklevel = [121 112]
mha.calib_out.fir = [[1];[1]]
mha.calib_out.softclip.tau_attack = 0.002
mha.calib_out.softclip.tau_decay = 0.005
mha.calib_out.softclip.threshold = 1
mha.calib_out.softclip.slope = 0.5
mha.calib_out.softclip.linear = no
mha.calib_out.softclip.tau_clip = 1
mha.calib_out.nbits = 0
#
# Setup of analysis branch
#
# The analysis branch will typically run with lower processing
# priority and with larger block sizes than the filter path. Data from
# the analysis path can be transferred back to the filter path via AC
# variables.
#
# In this example, the RMS level in the last second is calculated and
# handed over to the filter path (this is for illustration only, level
# meter plugins with much higher performance are available).
#
mha.mhachain.algos = [analysispath acmon]
mha.mhachain.analysispath.plugname = mhachain
mha.mhachain.analysispath.fragsize = 48000
mha.mhachain.analysispath.fifolen = 10
mha.mhachain.analysispath.priority = -1
mha.mhachain.analysispath.acvars = [rmslevel_level_db]
mha.mhachain.analysispath.plug.algos = [rmslevel mhadebug]
mha.mhachain.acmon.dispmode = vector
mha.mhachain.acmon.recmode = cont
#
# Audio interface setup
#
io.name = MHA
io.con_in = [system:capture_1 system:capture_2]
io.con_out = [system:playback_1 system:playback_2]
