# This file is part of the HörTech Open Master Hearing Aid (openMHA)
# Copyright © 2020 HörTech gGmbH
#
# openMHA is free software: you can redistribute it and/or modify
# it under the terms of the GNU Affero General Public License as published by
# the Free Software Foundation, version 3 of the License.
#
# openMHA is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU Affero General Public License, version 3 for more details.
#
# You should have received a copy of the GNU Affero General Public License, 
# version 3 along with openMHA.  If not, see <http://www.gnu.org/licenses/>.


# bilateral Adaptive differntial microphone
#
# Elko, G. W., & Pong, A. T. N. (1995, October). A simple adaptive
# first-order differential microphone. In Proceedings of 1995 Workshop
# on Applications of Signal Processing to Audio and Acoustics
# (pp. 169-172). IEEE.
#
# Input channel layout:
# front-left front-right rear-left rear-right
#
# Sampling rate: 44100 Hz
#

# chAlgo = [1,2,5,6];
nchannels_in = 4
fragsize = 64
srate = 44100
mhalib = adm
iolib = MHAIOFile
sleep = 0
cmd = nop
errorlog = 
fatallog = 
plugins = []
plugin_paths = []
dump_mha = no
instance = mha
port = 0
mha.front_channels = [0 1]
mha.rear_channels = [2 3]
mha.distances = [0.0149 0.0149]
mha.lp_order = 46
mha.decomb_order = 54
mha.bypass = 0
mha.beta = -1
io.output_sample_format = input
io.startsample = 0
io.length = 0
io.strict_channel_match = yes
io.strict_srate_match = yes
